PsychoPy2experiment version="3.0.0b7"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['TAG ID'], expName, expInfo['date'])
  Experiment info = {'TAG ID': 'TAGxxx', 'Wave': 'sos'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = sos
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Routines
  Routine rest_end
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        thisExp.addData('rest_onset', (globalClock.getTime()-trigger.rt))
      End Routine:
        thisExp.addData('rest_duration', t)
    PolygonComponent cross_end
      fillColor = $[1,1,1]
      lineWidth = 0
      shape = cross
      size = (0.1, 0.1778)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.98693
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  Routine end
    TextComponent end_run
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      text = Scan Complete!
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    KeyboardComponent exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        thisExp.addData('rest_onset', (globalClock.getTime()-trigger.rt))
      End Routine:
        thisExp.addData('rest_duration', t)
    PolygonComponent cross
      fillColor = $[1,1,1]
      lineWidth = 0
      shape = cross
      size = (0.1, 0.1778)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $DurationRest
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  Routine condition
    CodeComponent code
      Code Type = Py
      Begin Routine:
        thisExp.addData('block_onset', (globalClock.getTime()-trigger.rt))
      End Routine:
        thisExp.addData('block_duration', t)
    PolygonComponent background
      fillColor [set every repeat] = $Color
      lineColor [set every repeat] = $Color
      lineWidth = 0
      shape = rectangle
      size = (1366, 768)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
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    MovieComponent clip
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $Path
      size = (1184,666)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
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    TextComponent cue
      letterHeight = 0.125
      pos = (0, .9375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
      text [set every repeat] = $Cue
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  Routine wait
    TextComponent sync
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      text = Syncing with off-site scanner...
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    KeyboardComponent trigger
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine wait
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = trialorder.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('OnsetRest', 0.0), ('DurationRest', 12.033380000000001), ('Condition', 1), ('Onset', 12.033380000000001), ('Duration', 16.62983), ('Path', 'confed\\cond1_block1.mp4'), ('Cue', 'ON'), ('Color', 'green')]),
      OrderedDict([('OnsetRest', 28.66321), ('DurationRest', 7.874866), ('Condition', 2), ('Onset', 36.53808), ('Duration', 17.521539999999998), ('Path', 'subj\\block1.mp4'), ('Cue', 'OFF'), ('Color', 'red')]),
      OrderedDict([('OnsetRest', 54.059619999999995), ('DurationRest', 8.202558), ('Condition', 3), ('Onset', 62.26218000000001), ('Duration', 14.67349), ('Path', 'subj\\block2.mp4'), ('Cue', 'ON'), ('Color', 'green')]),
      OrderedDict([('OnsetRest', 76.93567), ('DurationRest', 10.94927), ('Condition', 2), ('Onset', 87.88495), ('Duration', 19.5041), ('Path', 'subj\\block3.mp4'), ('Cue', 'OFF'), ('Color', 'red')]),
      OrderedDict([('OnsetRest', 107.389), ('DurationRest', 4.246045), ('Condition', 3), ('Onset', 111.6351), ('Duration', 14.328829999999998), ('Path', 'subj\\block4.mp4'), ('Cue', 'ON'), ('Color', 'green')]),
      OrderedDict([('OnsetRest', 125.9639), ('DurationRest', 11.53775), ('Condition', 1), ('Onset', 137.5017), ('Duration', 18.33086), ('Path', 'confed\\cond1_block2.mp4'), ('Cue', 'ON'), ('Color', 'green')]),
      OrderedDict([('OnsetRest', 155.8325), ('DurationRest', 9.049707000000001), ('Condition', 3), ('Onset', 164.8822), ('Duration', 12.02481), ('Path', 'subj\\block5.mp4'), ('Cue', 'ON'), ('Color', 'green')])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
    Routine rest
    Routine condition
  LoopTerminator trials_loop
  Routine rest_end
  Routine end
